PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = blockedTrials
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Routines
  Routine trial
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $stimFile
      startVal [time (s)] = 0.0
      stopVal [condition] = 0.0
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  Routine readyMessage
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $readyMsg
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        condNum = randint(1,5)
        condFile = 'chooseBlock' + str(condNum) + '.csv'
  Routine data_collection
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      units = height
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      text:
        Type the words you remember
    TextComponent endButton
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Click here to continue
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    MouseComponent mouse
      clickable = endButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine math
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      movie = math.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 130.0
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  Routine math_text
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40.0
      text = Önünüze matematik soruları çıkacaktır. Aklınızdan ya da kağıt üzerine çözünüz.
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  Routine data_text
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40.0
      text = Az sonra sizden hatırladığınız kelimeleri yazmanız istenecektir. Hatırladığınız kelimleri yazınca fare imleci ile SON’a tıklayanız.
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  Routine giris
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text = Deneyimize hoşgeldiniz. Birazdan 10 tane cümle dinleyeceksiniz. Aklınızda tutmaya çalışın.
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Flow
  Routine giris
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $condFile
    isTrials = False
    loopType = random
    nReps = 1
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    Routine readyMessage
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine math_text
  Routine math
  Routine data_text
  Routine data_collection
